<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdWaveformMessageReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_mricore</dll>
            <classname>MRIImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <!-- StarterAcquisitionChannelGadget-->
        <gadget>
            <name>StarterAcquisitionChannelGadget</name>
            <dll>StarterGadgets</dll>
            <classname>StarterAcquisitionChannelGadget</classname>
            <property>
                <name>MaxAddedNoise</name>
                <value>0.0f</value>
            </property>
        </gadget>

        <gadget>
            <name>AccTrig</name>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property>
                <name>trigger_dimension</name>
                <value>repetition</value>
            </property>
            <property>
                <name>sorting_dimension</name>
                <value>slice</value>
            </property>
        </gadget>

        <gadget>
            <name>Buff</name>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property>
                <name>N_dimension</name>
                <value></value>
            </property>
            <property>
                <name>S_dimension</name>
                <value></value>
            </property>
            <property>
                <name>split_slices</name>
                <value>true</value>
            </property>
        </gadget>

        <gadget>
            <name>SimpleRecon</name>
            <dll>gadgetron_mricore</dll>
            <classname>SimpleReconGadget</classname>
        </gadget>

        <gadget>
            <name>ImageArraySplit</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageArraySplitGadget</classname>
        </gadget>

        <gadget>
            <name>Extract</name>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>

        <!-- StarterImageChannelGadget-->
        <gadget>
            <name>StarterImageChannelGadget</name>
            <dll>StarterGadgets</dll>
            <classname>StarterImageChannelGadget</classname>
            <property>
                <name>ImageIndexOffset</name>
                <value>0</value>
            </property>
        </gadget>

        <!-- StarterImagePureGadget-->
        <gadget>
            <name>StarterImagePureGadget</name>
            <dll>StarterGadgets</dll>
            <classname>StarterImagePureGadget</classname>
        </gadget>

        <gadget>
            <name>ImageFinish</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageFinishGadget</classname>
        </gadget>
    </stream>

</configuration>
