<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdWaveformMessageReader</classname>
        </reader>
    </readers>
    <writers>
        <writer>
            <dll>gadgetron_mricore</dll>
            <classname>MRIImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <name>AccTrig</name>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property>
                <name>trigger_dimension</name>
                <value>repetition</value>
            </property>
            <property>
                <name>sorting_dimension</name>
                <value>slice</value>
            </property>
        </gadget>

        <gadget>
            <name>Buff</name>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property>
                <name>N_dimension</name>
                <value></value>
            </property>
            <property>
                <name>S_dimension</name>
                <value></value>
            </property>
            <property>
                <name>split_slices</name>
                <value>true</value>
            </property>
        </gadget>

        <gadget>
            <name>SimpleFFT_CPP</name>
            <dll>gadgetron_simpleFFT</dll>
            <classname>SimpleFFT_CPP</classname>
        </gadget>

        <gadget>
            <name>ImageFinish</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageFinishGadget</classname>
        </gadget>
    </stream>

</configuration>