<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdWaveformMessageReader</classname>
        </reader>
    </readers>
    <writers>
        <writer>
            <dll>gadgetron_mricore</dll>
            <classname>MRIImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <name>SimpleFFT_Python</name>
            <dll>gadgetron_simpleFFT</dll>
            <classname>SimpleFFT_Python</classname>
        </gadget>

        <gadget>
            <name>ImageFinish</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageFinishGadget</classname>
        </gadget>
    </stream>

</configuration>